PsychoPy2experiment version="2022.2.4"
Settings
  Completed URL = $"https://psykuleuven.sona-systems.com/webstudy_credit.aspx?experiment_id=1767&credit_token=98e3a8ee886b4335b0abe04ab1a82165&survey_code=" + expInfo['participant']
  Data filename = "sub-" + expInfo['ID'] + "_ses-003_task-training_script-BR_date-" + expInfo['date']
  Experiment info = {'ID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  color = $[-1.0,-1.0,-1.0]
  expName = vbt_B1_day3
  exportHTML = on Save
  keyboardBackend = ioHub
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Routines
  Routine welcome
    TextComponent welcome_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Goeiedag en welkom,

        Vandaag gaan we ons enkel concentreren op het leren van woorden. Net als in de vorige sessies zal er een gedeelte zijn waarin we bepaalde woorden oefenen, en daarna een test om te zien hoe goed u het doet.

        Klik met de muis om verder te gaan met de instructies.
    MouseComponent welcome_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine train_instr
    TextComponent trainInstr_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Ter herinnering: u krijgt een woord in het nieuwe alfabet voorgeschoteld. We vragen u om het in stilte te lezen en het te proberen decoderen in Nederlandse letters. Wanneer u dit heeft gedaan, drukt u op de “pijl omlaag” op uw toetsenbord om de oplossing te zien. Daarna klikt u met de muis om verder te gaan naar het volgende woord.

        Soms ziet u een witte balk en wordt u gevraagd het antwoord te typen in plaats van het te decoderen in uw hoofd. De opdracht is dezelfde: druk op de onderste pijl op uw toetsenbord om de oplossing te controleren. Klik daarna met de muis om verder te gaan.

        Na de training volgt nog een korte test, dus let goed op de woorden.

        Klik met de muis om te starten met het leren van de woorden, en om door te gaan naar het volgende woord.
    MouseComponent trainInstr_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent end_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        De test is nu voorbij.

        Dit betekent dat de oefening voorlopig voorbij is. Wacht tot het pop-up venster is gesloten voordat u de webpagina verlaat.

        Tot binnen enkele dagen!
  Routine test_instr
    TextComponent testInstr_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        We gaan nu een korte test doen om te zien hoe goed u deze woorden heeft geleerd.

        U krijgt 60 items voorgelegd. Sommige zijn woorden die u net hebt gezien, sommige zijn nieuw en sommige hebben geen betekenis (niet-woorden).
        Na 6 seconden verdwijnen de woorden en wordt u gevraagd om de overeenkomstige letterreeks (de vertaling) in te typen in het antwoordveld dat verschijnt.
        Als er een letter is die je niet meer weet, kun je die overslaan door de letter simpelweg te vervangen door een punt '.'

        Probeer zo nauwkeurig mogelijk te zijn.

        Zodra uw antwoord is ingevoerd, klikt u met de muis om naar het volgende woord te gaan.

        Als u klaar bent voor de test, klik dan met de muis om te beginnen.
    MouseComponent testInstr_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine test_report
    TextComponent report_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = [TEST RESPONSE]
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    KeyboardComponent response_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine word_training
    ImageComponent braille_word
      image [set every repeat] = $brWrd
      size = (0.7, 0.1)
      startVal [time (s)] = 0.5
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    TextComponent dutch_word
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [condition] = $translation_key.keys == 'down'
      text [set every repeat] = $nlWrd
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    KeyboardComponent translation_key
      allowedKeys = 'down'
      correctAns = 't'
      forceEndRoutine = False
      startVal [time (s)] = 3.0
      storeCorrect = True
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    CodeComponent word_code
      Code Type = Auto->JS
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      Begin Routine:
        if test == 1:
            word_rsp.editable = true;
            word_rsp.refresh()
            word_rsp.setAutoDraw(True)

        print(test)
      End Routine:
        if test == 1:
            train_loop.addData('testResp',word_rsp._pixi.text)
            word_rsp.reset()
    TextboxComponent word_rsp
      bold = False
      borderColor = none
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.5, 0.05)
      startVal [condition] = $test == 1
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    MouseComponent trWrd_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [condition] = $translation_key.keys == 'down'
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  Routine refresh_instr
    TextComponent refresh_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Nous allons rafraîchir vos apprentissages sur les lettres.

        La tâche est la même que celle de la dernière session: vous verrez d'abord la lettre de la nouvelle langue, puis sa correspondance en français. En cliquant avec la souris vous passerez à la lettre suivante. Chaque lettre ne sera répétée qu’une seule fois.

        Lorsque vous êtes prêt à commencer, cliquez avec la souris pour commencer l'entraînement.
    MouseComponent refresh_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine let_refresh
    ImageComponent outline
      image = images/red_outline.jpg
      size = (0.11, 0.158)
      startVal [time (s)] = 0.0
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    ImageComponent braille_letter
      image [set every repeat] = $cbLet
      size = (0.1, 0.148)
      startVal [time (s)] = 0.0
      texture resolution = 256
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    TextComponent french_letter
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 1.5
      text [set every repeat] = $frLet
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    MouseComponent braille_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 3.0
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  Routine word_test
    ImageComponent test_word
      image [set every repeat] = $brWrd
      size = (0.7, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
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    MouseComponent test_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 6
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    TextboxComponent test_response
      bold = False
      borderColor = none
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (0, -0.2)
      size = (0.5, 0.05)
      startVal [time (s)] = 6
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        test_response.editable = true;
        test_response.refresh()
      End Routine:
        test_loop.addData('testResp',test_response._pixi.text)

        # clear field
        test_response.reset()
  Routine end_training
    TextComponent endTrain_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        De training is voorbij

        Neem een pauze van 5-10 minuten en laat ondertussen het beeldscherm staan op deze pagina. Kom terug voor de test wanneer u klaar bent.

        Als u dat gedaan heeft, klikt u met de muis om verder te gaan met de testinstructies.
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  Routine train_instr
  LoopInitiator train_loop loopType="TrialHandler"
    conditionsFile = training_d3.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('nlWrd', 'slak'), ('brWrd', 'images/br_slak.png'), ('cbWrd', 'images/cb_slak.png'), ('test', 0)]),
      OrderedDict([('nlWrd', 'zaal'), ('brWrd', 'images/br_zaal.png'), ('cbWrd', 'images/cb_zaal.png'), ('test', 0)]),
      OrderedDict([('nlWrd', 'jaar'), ('brWrd', 'images/br_jaar.png'), ('cbWrd', 'images/cb_jaar.png'), ('test', 0)]),
      OrderedDict([('nlWrd', 'mand'), ('brWrd', 'images/br_mand.png'), ('cbWrd', 'images/cb_mand.png'), ('test', 0)]),
      OrderedDict([('nlWrd', 'moes'), ('brWrd', 'images/br_moes.png'), ('cbWrd', 'images/cb_moes.png'), ('test', 0)]),
      OrderedDict([('nlWrd', 'blad'), ('brWrd', 'images/br_blad.png'), ('cbWrd', 'images/cb_blad.png'), ('test', 0)]),
      OrderedDict([('nlWrd', 'diep'), ('brWrd', 'images/br_diep.png'), ('cbWrd', 'images/cb_diep.png'), ('test', 0)]),
      OrderedDict([('nlWrd', 'geld'), ('brWrd', 'images/br_geld.png'), ('cbWrd', 'images/cb_geld.png'), ('test', 0)]),
      OrderedDict([('nlWrd', 'knie'), ('brWrd', 'images/br_knie.png'), ('cbWrd', 'images/cb_knie.png'), ('test', 0)]),
      OrderedDict([('nlWrd', 'hier'), ('brWrd', 'images/br_hier.png'), ('cbWrd', 'images/cb_hier.png'), ('test', 0)]),
      OrderedDict([('nlWrd', 'leek'), ('brWrd', 'images/br_leek.png'), ('cbWrd', 'images/cb_leek.png'), ('test', 0)]),
      OrderedDict([('nlWrd', 'mode'), ('brWrd', 'images/br_mode.png'), ('cbWrd', 'images/cb_mode.png'), ('test', 0)]),
      OrderedDict([('nlWrd', 'kust'), ('brWrd', 'images/br_kust.png'), ('cbWrd', 'images/cb_kust.png'), ('test', 0)])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
    Routine word_training
  LoopTerminator train_loop
  Routine end_training
  Routine test_instr
  LoopInitiator test_loop loopType="TrialHandler"
    conditionsFile = test_d3.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('nlWrd', 'knie'), ('brWrd', 'images/br_knie.png'), ('cbWrd', 'images/cb_knie.png')]),
      OrderedDict([('nlWrd', 'hier'), ('brWrd', 'images/br_hier.png'), ('cbWrd', 'images/cb_hier.png')]),
      OrderedDict([('nlWrd', 'leek'), ('brWrd', 'images/br_leek.png'), ('cbWrd', 'images/cb_leek.png')]),
      OrderedDict([('nlWrd', 'mode'), ('brWrd', 'images/br_mode.png'), ('cbWrd', 'images/cb_mode.png')]),
      OrderedDict([('nlWrd', 'steel'), ('brWrd', 'images/br_steel.png'), ('cbWrd', 'images/cb_steel.png')]),
      OrderedDict([('nlWrd', 'laken'), ('brWrd', 'images/br_laken.png'), ('cbWrd', 'images/cb_laken.png')]),
      OrderedDict([('nlWrd', 'stoom'), ('brWrd', 'images/br_stoom.png'), ('cbWrd', 'images/cb_stoom.png')]),
      OrderedDict([('nlWrd', 'samen'), ('brWrd', 'images/br_samen.png'), ('cbWrd', 'images/cb_samen.png')]),
      OrderedDict([('nlWrd', 'boeien'), ('brWrd', 'images/br_boeien.png'), ('cbWrd', 'images/cb_boeien.png')]),
      OrderedDict([('nlWrd', 'slapen'), ('brWrd', 'images/br_slapen.png'), ('cbWrd', 'images/cb_slapen.png')]),
      OrderedDict([('nlWrd', 'geluid'), ('brWrd', 'images/br_geluid.png'), ('cbWrd', 'images/cb_geluid.png')]),
      OrderedDict([('nlWrd', 'gezond'), ('brWrd', 'images/br_gezond.png'), ('cbWrd', 'images/cb_gezond.png')]),
      OrderedDict([('nlWrd', 'prikken'), ('brWrd', 'images/br_prikken.png'), ('cbWrd', 'images/cb_prikken.png')]),
      OrderedDict([('nlWrd', 'verhaal'), ('brWrd', 'images/br_verhaal.png'), ('cbWrd', 'images/cb_verhaal.png')])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
    Routine word_test
  LoopTerminator test_loop
  Routine end
