PsychoPy2experiment version="2022.2.4"
Settings
  Completed URL = $"https://psykuleuven.sona-systems.com/webstudy_credit.aspx?experiment_id=1769&credit_token=0c000c8a374346aeb708e3effe61cf60&survey_code=" + expInfo['participant']
  Data filename = "sub-" + expInfo['ID'] + "_ses-001_task-training_script-CB_date-" + expInfo['date']
  Experiment info = {'ID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  color = $[-1.0,-1.0,-1.0]
  expName = vbt_B2_day1
  exportHTML = on Save
  keyboardBackend = ioHub
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Routines
  Routine welcome
    TextComponent welcome_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Goeiedag,

        In deze eerste sessie van het experiment leert u de letters van ons Nederlandse alfabet te associëren met de overeenkomstige tekens van een nieuwe taal.

        Voordat u begint, tonen de volgende twee schermen de geïnformeerde toestemming. Door met uw muis te klikken en door te gaan met het experiment, gaat u akkoord met de voorwaarden die in de geïnformeerde toestemming voor de volgende experimenten staan.

        Als u zich om welke reden dan ook wilt terugtrekken uit dit (en alle volgende) experiment(en), drukt u op "esc" om de pagina te verlaten.

        Na de geïnformeerde toestemming zullen we meer informatie geven over de taakdetails van deze eerste sessie.

        Klik op de muis om door te gaan naar de volgende pagina.
    MouseComponent welcome_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine train_instr
    TextComponent trainInstr_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        We zijn klaar met de letters.

        Nu gaan we woorden vormen met de nieuwe letters die u heeft geleerd.

        U ziet een woord geschreven in het nieuwe alfabet. We vragen u om het in stilte te lezen en het te proberen decoderen in Nederlandse letters. Wanneer u dit heeft gedaan, drukt u op de “pijl omlaag” op uw toetsenbord om de oplossing te zien. Daarna klikt u met de muis om verder te gaan naar het volgende woord.

        Soms ziet u een witte balk en wordt u gevraagd het antwoord te typen in plaats van het te decoderen in uw hoofd. De opdracht is dezelfde: druk op de onderste pijl op uw toetsenbord om de oplossing te controleren. Klik daarna met de muis om verder te gaan.

        Na de training volgt nog een korte test, dus let goed op de woorden.

        Klik met de muis om te starten met het leren van de woorden, en door te gaan naar het volgende woord.
    MouseComponent trainInstr_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent end_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        De test is nu voorbij.

        Er komt geen nieuwe test :)

        Dit betekent dat de oefening voorlopig voorbij is. Wacht tot het pop-up venster is gesloten voordat u de webpagina verlaat.

        Tot over een paar dagen!

        De test is nu voorbij.
  Routine test_instr
    TextComponent testInstr_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        We gaan nu een korte test doen om te zien hoe goed u deze woorden heeft geleerd.

        U krijgt 60 items voorgelegd. Sommige zijn woorden die u net hebt gezien, sommige zijn nieuw en sommige hebben geen betekenis (niet-woorden).
        Na 6 seconden verdwijnen de woorden en wordt u gevraagd om de overeenkomstige letterreeks (de vertaling) in te typen in het antwoordveld dat verschijnt.
        Als er een letter is die je niet meer weet, kun je die overslaan door de letter simpelweg te vervangen door een punt '.'

        Probeer zo nauwkeurig mogelijk te zijn.

        Zodra uw antwoord is ingevoerd, klikt u met de muis om naar het volgende woord te gaan.

        Als u klaar bent voor de test, klik dan met de muis om te beginnen.
    MouseComponent testInstr_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine test_report
    TextComponent report_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = [TEST RESPONSE]
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    KeyboardComponent response_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine word_test
    ImageComponent test_word
      image [set every repeat] = $cbWrd
      size = (0.7, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
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    MouseComponent test_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 6
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    TextboxComponent test_response
      bold = False
      borderColor = none
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (0, -0.2)
      size = (0.5, 0.05)
      startVal [time (s)] = 6
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    CodeComponent test_code
      Code Type = Auto->JS
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      Begin Routine:
        test_response.editable = true;
        test_response.refresh()
      End Routine:
        test_loop.addData('testResp',test_response._pixi.text)

        # clear field
        test_response.reset()
  Routine end_training
    TextComponent endTrain_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        De training is voorbij

        Neem een pauze van 5-10 minuten en laat ondertussen het beeldscherm staan op deze pagina. Kom terug voor de test wanneer u klaar bent.

        Als u dat gedaan heeft, klikt u met de muis om verder te gaan met de testinstructies.
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine training_instr
    TextComponent train_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Vandaag leren we de letter-voor-letter overeenkomst van het Nederlandse alfabet en het nieuwe alfabet.

        Eerst wordt er geoefend: u ziet een letter van het nieuwe alfabet en even later de overeenkomstige letter van ons Nederlandse alfabet. Zorg ervoor dat u zich op elke letter concentreert.
        Als u klaar bent om naar de volgende letter te gaan, dan klikt u met de muis.

        U zult alle letters 7 keer zien, en dit in een willekeurige volgorde.

        Na de training vragen we u een korte pauze te nemen (5-10 minuten) en dan terug te komen voor de test; Tijdens de test krijgt u woorden te zien gevormd door de letters die u tijdens de training heeft geleerd. Van u wordt gevraagd om het woord om te zetten naar ons alfabet en om het op uw toetsenbord in te typen.

        Let dus goed op tijdens de training van de nieuwe karakters.

        Wanneer u klaar bent om te beginnen, dan klikt u met de muis om de training te starten.
    MouseComponent train_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine letter_training
    ImageComponent outline
      image = images/red_outline.jpg
      size = (0.11, 0.158)
      startVal [time (s)] = 0.0
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    ImageComponent braille_letter
      image [set every repeat] = $cbLet
      size = (0.1, 0.148)
      startVal [time (s)] = 0.0
      texture resolution = 256
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    TextComponent dutch_letter
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 1.5
      text [set every repeat] = $nlLet
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    MouseComponent braille_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 3.0
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  Routine informed_consent_1
    ImageComponent image
      image = images/ic_1.png
      pos = (0, 0.1)
      size = (1, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Klik om verder te gann
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine informed_consent_2
    ImageComponent image_2
      image = images/ic_2.png
      pos = (0, 0.1)
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Klik om de voorwaarden te accepteren of druk op "esc" om de pagina te verlaten
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Flow
  Routine welcome
  Routine informed_consent_1
  Routine informed_consent_2
  Routine training_instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = letters.csv
    loopType = random
    nReps = 7
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    conditions:
      [OrderedDict([('nlLet', 'a'), ('brLet', 'images/br_a.png'), ('cbLet', 'images/cb_a.png')]),
      OrderedDict([('nlLet', 'b'), ('brLet', 'images/br_b.png'), ('cbLet', 'images/cb_b.png')]),
      OrderedDict([('nlLet', 'c'), ('brLet', 'images/br_c.png'), ('cbLet', 'images/cb_c.png')]),
      OrderedDict([('nlLet', 'd'), ('brLet', 'images/br_d.png'), ('cbLet', 'images/cb_d.png')]),
      OrderedDict([('nlLet', 'e'), ('brLet', 'images/br_e.png'), ('cbLet', 'images/cb_e.png')]),
      OrderedDict([('nlLet', 'f'), ('brLet', 'images/br_f.png'), ('cbLet', 'images/cb_f.png')]),
      OrderedDict([('nlLet', 'g'), ('brLet', 'images/br_g.png'), ('cbLet', 'images/cb_g.png')]),
      OrderedDict([('nlLet', 'h'), ('brLet', 'images/br_h.png'), ('cbLet', 'images/cb_h.png')]),
      OrderedDict([('nlLet', 'i'), ('brLet', 'images/br_i.png'), ('cbLet', 'images/cb_i.png')]),
      OrderedDict([('nlLet', 'j'), ('brLet', 'images/br_j.png'), ('cbLet', 'images/cb_j.png')]),
      OrderedDict([('nlLet', 'k'), ('brLet', 'images/br_k.png'), ('cbLet', 'images/cb_k.png')]),
      OrderedDict([('nlLet', 'l'), ('brLet', 'images/br_l.png'), ('cbLet', 'images/cb_l.png')]),
      OrderedDict([('nlLet', 'm'), ('brLet', 'images/br_m.png'), ('cbLet', 'images/cb_m.png')]),
      OrderedDict([('nlLet', 'n'), ('brLet', 'images/br_n.png'), ('cbLet', 'images/cb_n.png')]),
      OrderedDict([('nlLet', 'o'), ('brLet', 'images/br_o.png'), ('cbLet', 'images/cb_o.png')]),
      OrderedDict([('nlLet', 'p'), ('brLet', 'images/br_p.png'), ('cbLet', 'images/cb_p.png')])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
    Routine letter_training
  LoopTerminator trials
  Routine end_training
  Routine test_instr
  LoopInitiator test_loop loopType="TrialHandler"
    conditionsFile = test_d1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('nlWrd', 'slak'), ('brWrd', 'images/br_slak.png'), ('cbWrd', 'images/cb_slak.png')]),
      OrderedDict([('nlWrd', 'zaal'), ('brWrd', 'images/br_zaal.png'), ('cbWrd', 'images/cb_zaal.png')]),
      OrderedDict([('nlWrd', 'jaar'), ('brWrd', 'images/br_jaar.png'), ('cbWrd', 'images/cb_jaar.png')]),
      OrderedDict([('nlWrd', 'mand'), ('brWrd', 'images/br_mand.png'), ('cbWrd', 'images/cb_mand.png')]),
      OrderedDict([('nlWrd', 'schep'), ('brWrd', 'images/br_schep.png'), ('cbWrd', 'images/cb_schep.png')]),
      OrderedDict([('nlWrd', 'maken'), ('brWrd', 'images/br_maken.png'), ('cbWrd', 'images/cb_maken.png')]),
      OrderedDict([('nlWrd', 'bleek'), ('brWrd', 'images/br_bleek.png'), ('cbWrd', 'images/cb_bleek.png')]),
      OrderedDict([('nlWrd', 'klauw'), ('brWrd', 'images/br_klauw.png'), ('cbWrd', 'images/cb_klauw.png')]),
      OrderedDict([('nlWrd', 'kanjer'), ('brWrd', 'images/br_kanjer.png'), ('cbWrd', 'images/cb_kanjer.png')]),
      OrderedDict([('nlWrd', 'dubbel'), ('brWrd', 'images/br_dubbel.png'), ('cbWrd', 'images/cb_dubbel.png')]),
      OrderedDict([('nlWrd', 'muziek'), ('brWrd', 'images/br_muziek.png'), ('cbWrd', 'images/cb_muziek.png')]),
      OrderedDict([('nlWrd', 'mening'), ('brWrd', 'images/br_mening.png'), ('cbWrd', 'images/cb_mening.png')]),
      OrderedDict([('nlWrd', 'klimmen'), ('brWrd', 'images/br_klimmen.png'), ('cbWrd', 'images/cb_klimmen.png')]),
      OrderedDict([('nlWrd', 'twijfel'), ('brWrd', 'images/br_twijfel.png'), ('cbWrd', 'images/cb_twijfel.png')])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
    Routine word_test
  LoopTerminator test_loop
  Routine end
