PsychoPy2experiment version="2022.2.4"
Settings
  Completed URL = $"https://psykuleuven.sona-systems.com/webstudy_credit.aspx?experiment_id=1770&credit_token=d3c41fc0906c4730a0c4be1124c662f5&survey_code=" + expInfo['participant']
  Data filename = "sub-" + expInfo['ID'] + "_ses-002_task-training_script-CB_date-" + expInfo['date']
  Experiment info = {'ID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  color = $[-1.0,-1.0,-1.0]
  expName = vbt_B2_day2
  exportHTML = on Save
  keyboardBackend = ioHub
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Routines
  Routine welcome
    TextComponent welcome_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Goeiedag,

        In deze tweede trainingssessie gaan we eerst de letters bekijken, en daarna beginnen we met het leren van de woorden.

        Het trainingsgedeelte voor de letters is hetzelfde als in de vorige sessie.

        Voor de woorden wordt de Nederlandse vertaling van elk woord voorgesteld.

        Als u klaar bent, dan klikt u met de muis om verder te gaan.
    MouseComponent welcome_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine train_instr
    TextComponent trainInstr_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        We zijn klaar met de letters.

        Nu gaan we woorden vormen met de nieuwe letters die u heeft geleerd.

        U ziet een woord geschreven in het nieuwe alfabet. We vragen u om het in stilte te lezen en het te proberen decoderen in Nederlandse letters. Wanneer u dit heeft gedaan, drukt u op de “pijl omlaag” op uw toetsenbord om de oplossing te zien. Daarna klikt u met de muis om verder te gaan naar het volgende woord.

        Soms ziet u een witte balk en wordt u gevraagd het antwoord te typen in plaats van het te decoderen in uw hoofd. De opdracht is dezelfde: druk op de onderste pijl op uw toetsenbord om de oplossing te controleren. Klik daarna met de muis om verder te gaan.

        Na de training volgt nog een korte test, dus let goed op de woorden.

        Klik met de muis om te starten met het leren van de woorden, en door te gaan naar het volgende woord.
    MouseComponent trainInstr_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent end_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        De test is nu voorbij.

        Er komt geen nieuwe test :)

        Dit betekent dat de oefening voorlopig voorbij is. Wacht tot het pop-up venster is gesloten voordat u de webpagina verlaat.

        Tot over een paar dagen!

        De test is nu voorbij.
  Routine test_instr
    TextComponent testInstr_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        We gaan nu een korte test doen om te zien hoe goed u deze woorden heeft geleerd.

        U krijgt 60 items voorgelegd. Sommige zijn woorden die u net hebt gezien, sommige zijn nieuw en sommige hebben geen betekenis (niet-woorden).
        Na 6 seconden verdwijnen de woorden en wordt u gevraagd om de overeenkomstige letterreeks (de vertaling) in te typen in het antwoordveld dat verschijnt.
        Als er een letter is die je niet meer weet, kun je die overslaan door de letter simpelweg te vervangen door een punt '.'

        Probeer zo nauwkeurig mogelijk te zijn.

        Zodra uw antwoord is ingevoerd, klikt u met de muis om naar het volgende woord te gaan.

        Als u klaar bent voor de test, klik dan met de muis om te beginnen.
    MouseComponent testInstr_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine test_report
    TextComponent report_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = [TEST RESPONSE]
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    KeyboardComponent response_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine word_training
    ImageComponent braille_word
      image [set every repeat] = $cbWrd
      size = (0.7, 0.1)
      startVal [time (s)] = 0.5
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    TextComponent dutch_word
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [condition] = $translation_key.keys == 'down'
      text [set every repeat] = $nlWrd
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    KeyboardComponent translation_key
      allowedKeys = 'down'
      correctAns = 't'
      forceEndRoutine = False
      startVal [time (s)] = 3
      storeCorrect = True
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    CodeComponent word_code
      Code Type = Auto->JS
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      Begin Routine:
        if test == 1:
            word_rsp.editable = true;
            word_rsp.refresh()
            word_rsp.setAutoDraw(True)

        print(translation_key.keys)
      End Routine:
        if test == 1:
            train_loop.addData('testResp',word_rsp._pixi.text)
            word_rsp.reset()
    TextboxComponent word_rsp
      bold = False
      borderColor = none
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.5, 0.05)
      startVal [condition] = $test == 1
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    MouseComponent word_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [condition] = $translation_key.keys == 'down'
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  Routine refresh_instr
    TextComponent refresh_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        We zullen uw kennis over de letters opnieuw opfrissen.

        De opdracht is dezelfde als in de vorige sessie: u ziet eerst de letter van de nieuwe taal en daarna zijn overeenkomstige letter in het Nederlands.
        Door met de muis te klikken gaat u naar de volgende letter. Elke letter zal slechts één keer worden herhaald.

        Als u klaar bent om te beginnen, dan klikt u op de muis om de training te starten.
    MouseComponent refresh_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine let_refresh
    ImageComponent outline
      image = images/red_outline.jpg
      size = (0.11, 0.158)
      startVal [time (s)] = 0.0
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    ImageComponent braille_letter
      image [set every repeat] = $cbLet
      size = (0.1, 0.148)
      startVal [time (s)] = 0.0
      texture resolution = 256
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    TextComponent dutch_letter
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 1.5
      text [set every repeat] = $nlLet
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    MouseComponent braille_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 3.0
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  Routine word_test
    ImageComponent test_word
      image [set every repeat] = $cbWrd
      size = (0.7, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
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    MouseComponent test_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 6
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    TextboxComponent test_response
      bold = False
      borderColor = none
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (0, -0.2)
      size = (0.5, 0.05)
      startVal [time (s)] = 6
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    CodeComponent test_code
      Code Type = Auto->JS
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      Begin Routine:
        test_response.editable = True;
        test_response.refresh()
      End Routine:
        test_loop.addData('testResp',test_response._pixi.text)

        # clear field
        test_response.reset()
  Routine end_training
    TextComponent endTrain_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        De training is voorbij

        Neem een pauze van 5-10 minuten en laat ondertussen het beeldscherm staan op deze pagina. Kom terug voor de test wanneer u klaar bent.

        Als u dat gedaan heeft, klikt u met de muis om verder te gaan met de testinstructies.
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  Routine refresh_instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = letters.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('nlLet', 'a'), ('brLet', 'images/br_a.png'), ('cbLet', 'images/cb_a.png')]),
      OrderedDict([('nlLet', 'b'), ('brLet', 'images/br_b.png'), ('cbLet', 'images/cb_b.png')]),
      OrderedDict([('nlLet', 'c'), ('brLet', 'images/br_c.png'), ('cbLet', 'images/cb_c.png')]),
      OrderedDict([('nlLet', 'd'), ('brLet', 'images/br_d.png'), ('cbLet', 'images/cb_d.png')]),
      OrderedDict([('nlLet', 'e'), ('brLet', 'images/br_e.png'), ('cbLet', 'images/cb_e.png')]),
      OrderedDict([('nlLet', 'f'), ('brLet', 'images/br_f.png'), ('cbLet', 'images/cb_f.png')]),
      OrderedDict([('nlLet', 'g'), ('brLet', 'images/br_g.png'), ('cbLet', 'images/cb_g.png')]),
      OrderedDict([('nlLet', 'h'), ('brLet', 'images/br_h.png'), ('cbLet', 'images/cb_h.png')]),
      OrderedDict([('nlLet', 'i'), ('brLet', 'images/br_i.png'), ('cbLet', 'images/cb_i.png')]),
      OrderedDict([('nlLet', 'j'), ('brLet', 'images/br_j.png'), ('cbLet', 'images/cb_j.png')]),
      OrderedDict([('nlLet', 'k'), ('brLet', 'images/br_k.png'), ('cbLet', 'images/cb_k.png')]),
      OrderedDict([('nlLet', 'l'), ('brLet', 'images/br_l.png'), ('cbLet', 'images/cb_l.png')]),
      OrderedDict([('nlLet', 'm'), ('brLet', 'images/br_m.png'), ('cbLet', 'images/cb_m.png')]),
      OrderedDict([('nlLet', 'n'), ('brLet', 'images/br_n.png'), ('cbLet', 'images/cb_n.png')]),
      OrderedDict([('nlLet', 'o'), ('brLet', 'images/br_o.png'), ('cbLet', 'images/cb_o.png')]),
      OrderedDict([('nlLet', 'p'), ('brLet', 'images/br_p.png'), ('cbLet', 'images/cb_p.png')])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
    Routine let_refresh
  LoopTerminator trials
  Routine train_instr
  LoopInitiator train_loop loopType="TrialHandler"
    conditionsFile = training_d2.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('nlWrd', 'slak'), ('brWrd', 'images/br_slak.png'), ('cbWrd', 'images/cb_slak.png'), ('test', 0)]),
      OrderedDict([('nlWrd', 'zaal'), ('brWrd', 'images/br_zaal.png'), ('cbWrd', 'images/cb_zaal.png'), ('test', 0)]),
      OrderedDict([('nlWrd', 'jaar'), ('brWrd', 'images/br_jaar.png'), ('cbWrd', 'images/cb_jaar.png'), ('test', 0)]),
      OrderedDict([('nlWrd', 'mand'), ('brWrd', 'images/br_mand.png'), ('cbWrd', 'images/cb_mand.png'), ('test', 0)]),
      OrderedDict([('nlWrd', 'moes'), ('brWrd', 'images/br_moes.png'), ('cbWrd', 'images/cb_moes.png'), ('test', 0)]),
      OrderedDict([('nlWrd', 'blad'), ('brWrd', 'images/br_blad.png'), ('cbWrd', 'images/cb_blad.png'), ('test', 0)]),
      OrderedDict([('nlWrd', 'diep'), ('brWrd', 'images/br_diep.png'), ('cbWrd', 'images/cb_diep.png'), ('test', 0)]),
      OrderedDict([('nlWrd', 'geld'), ('brWrd', 'images/br_geld.png'), ('cbWrd', 'images/cb_geld.png'), ('test', 0)]),
      OrderedDict([('nlWrd', 'knie'), ('brWrd', 'images/br_knie.png'), ('cbWrd', 'images/cb_knie.png'), ('test', 0)]),
      OrderedDict([('nlWrd', 'hier'), ('brWrd', 'images/br_hier.png'), ('cbWrd', 'images/cb_hier.png'), ('test', 0)]),
      OrderedDict([('nlWrd', 'leek'), ('brWrd', 'images/br_leek.png'), ('cbWrd', 'images/cb_leek.png'), ('test', 0)]),
      OrderedDict([('nlWrd', 'mode'), ('brWrd', 'images/br_mode.png'), ('cbWrd', 'images/cb_mode.png'), ('test', 0)]),
      OrderedDict([('nlWrd', 'kust'), ('brWrd', 'images/br_kust.png'), ('cbWrd', 'images/cb_kust.png'), ('test', 0)])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
    Routine word_training
  LoopTerminator train_loop
  Routine end_training
  Routine test_instr
  LoopInitiator test_loop loopType="TrialHandler"
    conditionsFile = test_d2.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('nlWrd', 'moes'), ('brWrd', 'images/br_moes.png'), ('cbWrd', 'images/cb_moes.png')]),
      OrderedDict([('nlWrd', 'blad'), ('brWrd', 'images/br_blad.png'), ('cbWrd', 'images/cb_blad.png')]),
      OrderedDict([('nlWrd', 'diep'), ('brWrd', 'images/br_diep.png'), ('cbWrd', 'images/cb_diep.png')]),
      OrderedDict([('nlWrd', 'geld'), ('brWrd', 'images/br_geld.png'), ('cbWrd', 'images/cb_geld.png')]),
      OrderedDict([('nlWrd', 'flits'), ('brWrd', 'images/br_flits.png'), ('cbWrd', 'images/cb_flits.png')]),
      OrderedDict([('nlWrd', 'piste'), ('brWrd', 'images/br_piste.png'), ('cbWrd', 'images/cb_piste.png')]),
      OrderedDict([('nlWrd', 'jagen'), ('brWrd', 'images/br_jagen.png'), ('cbWrd', 'images/cb_jagen.png')]),
      OrderedDict([('nlWrd', 'kabel'), ('brWrd', 'images/br_kabel.png'), ('cbWrd', 'images/cb_kabel.png')]),
      OrderedDict([('nlWrd', 'lokken'), ('brWrd', 'images/br_lokken.png'), ('cbWrd', 'images/cb_lokken.png')]),
      OrderedDict([('nlWrd', 'heilig'), ('brWrd', 'images/br_heilig.png'), ('cbWrd', 'images/cb_heilig.png')]),
      OrderedDict([('nlWrd', 'woning'), ('brWrd', 'images/br_woning.png'), ('cbWrd', 'images/cb_woning.png')]),
      OrderedDict([('nlWrd', 'toeval'), ('brWrd', 'images/br_toeval.png'), ('cbWrd', 'images/cb_toeval.png')]),
      OrderedDict([('nlWrd', 'bloeien'), ('brWrd', 'images/br_bloeien.png'), ('cbWrd', 'images/cb_bloeien.png')]),
      OrderedDict([('nlWrd', 'aanzien'), ('brWrd', 'images/br_aanzien.png'), ('cbWrd', 'images/cb_aanzien.png')])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
    Routine word_test
  LoopTerminator test_loop
  Routine end
